CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"CollectionTime": "text", "FileLocation": "text", "Column": "text", "Series": "text", "Frame": "text", "Well": "text", "Field": "text", "CellType": "text", "Time": "integer", "Row": "text"}
    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:\\\\\\\\(?P<CellType>[a-zA-Z]+)(?P<Time>[0-9]+)MIN
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:(?P<Row>[0-9]{3})(?P<Column>[0-9]{3})-(?P<Field>[0-9]+)-[0-9]{6}(?P<Channel>[0-9]{3})\\\\.tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:MIN\\\\[[0-9]{4}\\\\]\\\\\\\\(?P<CollectionTime>.+)\\\\[[0-9]{4}\\\\]\\\\\\\\
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
    Select the rule criteria:and (metadata does Channel "001")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "002")
    Name to assign these images:WCDGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "003")
    Name to assign these images:EndoFoxO3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:CollectionTime
    Metadata category:Well

ApplyThreshold:[module_num:5|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
    Select the input image:WCDGreen
    Name the output image:ThreshBG
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:MoG
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,0.042
    Approximate fraction of image covered by objects?:0.95
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
Morph:[module_num:6|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
    Select the input image:ThreshBG
    Name the output image:MorphThreshBG
    Select the operation to perform:dilate
    Number of times to repeat operation:Once
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    Scale:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Scale:10
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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    Select the operation to perform:clean
    Number of times to repeat operation:Once
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    Scale:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
MaskImage:[module_num:7|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
    Select the input image:EndoFoxO3
    Name the output image:MaskedEndoFoxO3
    Use objects or an image as a mask?:Image
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    Select image for mask:MorphThreshBG
    Invert the mask?:Yes

MeasureImageIntensity:[module_num:8|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
    Select the image to measure:MaskedEndoFoxO3
    Measure the intensity only from areas enclosed by objects?:No
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:DAPI
    Name the primary objects to be identified:FormerNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:7
    Suppress local maxima that are closer than this minimum allowed distance:5
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:FormerNuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:WCDGreen
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    Name the outline image:CellsOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Nuclei
    Retain outlines of the new primary objects?:Yes
    Name the new primary object outlines:NucleiOutlines
    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:1
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0015,0.02
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
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
ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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    Retain the outlines of the identified objects?:No
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:Nuclei
    Name the objects to be identified:SmallCells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:WCDGreen
    Number of pixels by which to expand the primary objects:6
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    Name the outline image:StringentCellsOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:1
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.009,0.02
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyTertiaryObjects:[module_num:13|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:No

IdentifyTertiaryObjects:[module_num:14|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
    Select the larger identified objects:SmallCells
    Select the smaller identified objects:ExpandedNuclei
    Name the tertiary objects to be identified:StringenCytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:No

MeasureObjectSizeShape:[module_num:15|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
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Select objects to measure:SmallCells
    Select objects to measure:StringenCytoplasm
    Select objects to measure:ExpandedNuclei
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:16|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
    Hidden:3
    Select an image to measure:DAPI
    Select an image to measure:WCDGreen
    Select an image to measure:EndoFoxO3
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:ExpandedNuclei
    Select objects to measure:Nuclei
    Select objects to measure:SmallCells
    Select objects to measure:StringenCytoplasm

CalculateMath:[module_num:17|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
    Name the output measurement:Normalized_Nuclei_EndoFoxO3
    Operation:Subtract
    Select the minuend measurement type:Object
    Select the minuend objects:Nuclei
    Select the minuend measurement:Intensity_MeanIntensity_EndoFoxO3
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Image
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    Select the subtrahend measurement:Intensity_MeanIntensity_MaskedEndoFoxO3
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:18|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
    Name the output measurement:Normalized_cytoplasm_EndoFoxO3
    Operation:Subtract
    Select the minuend measurement type:Object
    Select the minuend objects:Cytoplasm
    Select the minuend measurement:Intensity_MeanIntensity_EndoFoxO3
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Image
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    Select the subtrahend measurement:Intensity_MeanIntensity_MaskedEndoFoxO3
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:19|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
    Name the output measurement:Normalized_StringenCytoplasm_EndoFoxO3
    Operation:Subtract
    Select the minuend measurement type:Object
    Select the minuend objects:StringenCytoplasm
    Select the minuend measurement:Intensity_MeanIntensity_EndoFoxO3
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Image
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    Select the subtrahend measurement:Intensity_MeanIntensity_MaskedEndoFoxO3
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:20|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
    Name the output measurement:log10CoverN_Raw
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Intensity_MeanIntensity_EndoFoxO3
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Intensity_MeanIntensity_EndoFoxO3
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:Yes
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:21|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
    Name the output measurement:log10CoverN_stringent_Raw
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:StringenCytoplasm
    Select the numerator measurement:Intensity_MeanIntensity_EndoFoxO3
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Intensity_MeanIntensity_EndoFoxO3
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:Yes
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:22|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
    Name the output measurement:log10CoverN_Normalized
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Math_Normalized_cytoplasm_EndoFoxO3
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Math_Normalized_Nuclei_EndoFoxO3
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:Yes
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:23|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
    Name the output measurement:log10CoverN_stringent_Normalized
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:StringenCytoplasm
    Select the numerator measurement:Math_Normalized_StringenCytoplasm_EndoFoxO3
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Math_Normalized_Nuclei_EndoFoxO3
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:Yes
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ImageMath:[module_num:24|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:log2WCD
    Image or measurement?:Image
    Select the first image:WCDGreen
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:25|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
    Select the input image:log2WCD
    Name the output image:RescaledWCD
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0,0.3
    Intensity range for the output image:0.0,0.5
    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to custom value
    Custom value for pixels above upper limit:0.5
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
OverlayOutlines:[module_num:26|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledWCD
    Name the output image:OverlayWCD
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:CellsOutlines
    Select outline color:Red
    Load outlines from an image or objects?:Image
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    Select outlines to display:NucleiOutlines
    Select outline color:blue
    Load outlines from an image or objects?:Image
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    Select outlines to display:StringentCellsOutlines
    Select outline color:cyan
    Load outlines from an image or objects?:Image
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
SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:OverlayWCD
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:overlay
    Saved file format:bmp
    Output file location:Default Output Folder sub-folder|overlaid
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Select colormap:jet
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Input Folder|
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